// Configuration parameters to make the resulting Excel spreadsheet work with German localisation
columnSeparator = ','; /* ',' by default, ';' if run on German machines */
decimalSeparator = '.'; /* '.' by default, ',' if run on German machines */

// Set this variable to true to print intermediate results to the Log
printIntermediateResults = false;
decimalPlaces = 8;

function formatNumber(number) {
  return replace(d2s(number, 8), '.', decimalSeparator);
}

function printIfEnabled(message) {
  if (printIntermediateResults) {
    print(message);
  }
}

function safeSelectWindow(windowTitle) {
  if (nImages > 0 && getInfo("window.title") == windowTitle && getTitle() == windowTitle) {
    return;
  }
  wait(100);
  selectWindow(windowTitle);
  wait(100);
}

function safeWaitForUser(message) {
  currentImageId = getImageID();
  waitForUser(message);
  wait(100);
  selectImage(currentImageId);
}

function makeTiffFilename(prefix, title) {
  dotIndex = lastIndexOf(title, ".");
  if (dotIndex > 0) {
    title = substring(title, 0, dotIndex);
  }
  return prefix + title + ".tif";
}

function getJavaArgumentValue(key) {
  if (javaArgument == "") {
    return "";
  }
  parts = split(javaArgument, ";");
  prefix = key + "=";
  for (argumentIndex = 0; argumentIndex < parts.length; argumentIndex++) {
    if (startsWith(parts[argumentIndex], prefix)) {
      return substring(parts[argumentIndex], lengthOf(prefix));
    }
  }
  return "";
}

function openImageFile(fileName) {
  lowerName = toLowerCase(fileName);
  if (endsWith(lowerName, ".tif") || endsWith(lowerName, ".tiff")) {
    open(fileName);
  } else if (endsWith(lowerName, ".lsm") ||
             endsWith(lowerName, ".nd2") ||
             endsWith(lowerName, ".czi") ||
             endsWith(lowerName, ".lif") ||
             endsWith(lowerName, ".png") ||
             endsWith(lowerName, ".jpg") ||
             endsWith(lowerName, ".jpeg") ||
             endsWith(lowerName, ".bmp")) {
    run("Bio-Formats Importer", "open=[" + fileName + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
  } else {
    exit("Error: Unsupported image format: " + fileName);
  }
}

// Install Paintbrush Tool Options & other StartupMacros
macrosDirectory = getDirectory("macros");
run("Install...", "install="+macrosDirectory+File.separator+"StartupMacros.fiji.ijm");

function normalizeChannels() {
  getDimensions(width, height, numberOfChannels, slices, frames);

  if (frames > 1) {
    exit("Error: Time-series images (T > 1) are not supported. Reduce the image to a single time point before running aNMJ-morph.");
  }

  if (numberOfChannels == 1 && bitDepth() == 24 && slices == 1) {
    run("RGB Stack");
    run("Properties...", "channels=3 slices=1 frames=1");
    run("Make Composite", "display=Composite");
    return;
  }

  if (numberOfChannels == 1 && slices == 2) {
    suppliedTwoPlaneInterpretation = getJavaArgumentValue("two-plane");
    if (suppliedTwoPlaneInterpretation == "channels") {
      twoPlaneInterpretation = "Two channels (Keyence/two-page export)";
    } else if (suppliedTwoPlaneInterpretation == "z-stack") {
      twoPlaneInterpretation = "Z stack (maximum-project)";
    } else {
      Dialog.create("Two-plane image detected");
      Dialog.addMessage("This image contains one channel and two planes. This can represent either a two-page Keyence channel export or a genuine two-plane Z stack. Choose how the two planes should be interpreted.");
      Dialog.addChoice("Interpret as", newArray("Two channels (Keyence/two-page export)", "Z stack (maximum-project)"));
      Dialog.show();
      twoPlaneInterpretation = Dialog.getChoice();
    }

    if (twoPlaneInterpretation == "Two channels (Keyence/two-page export)") {
      run("Properties...", "channels=2 slices=1 frames=1");
    }
  }
}

javaArgument = getArgument();
javaImageIdText = getJavaArgumentValue("image-id");
if (javaImageIdText != "") {
  javaImageId = parseInt(javaImageIdText);
  selectImage(javaImageId);
  processOpenImage(getTitle());
} else if (javaArgument == "batch") {
  directory = getDirectory("Select directory with images to process");
  batchProcess(directory);
} else {
list = getList("image.titles");
if (list.length == 0) {
  Dialog.create("aNMJ-morph+");
  Dialog.addChoice("Analyze", newArray("Single image", "Batch folder"));
  Dialog.show();
  inputMode = Dialog.getChoice();

  if (inputMode == "Single image") {
    fileName = File.openDialog("Select image to analyze");
    openImageFile(fileName);
    processOpenImage(fileName);
  } else {
    directory = getDirectory("Select directory with images to process");
    batchProcess(directory);
  }
} else {
  safeSelectWindow(list[0]);
  processOpenImage(list[0]);
}
}

function processOpenImage(fileName) {
  normalizeChannels();

  originalTitle = File.getName(getTitle());
  if (getTitle() != originalTitle) {
    rename(originalTitle);
    originalTitle = getTitle();
  }
  originalDirectory = getDirectory("image");

  if (originalDirectory == "") {
    originalDirectory = getDirectory("Select folder for analysis output");
    if (originalDirectory == "") {
      exit("Error: An output folder is required");
    }
  }
  if (!endsWith(originalDirectory, File.separator)) {
    originalDirectory = originalDirectory + File.separator;
  }

  destination = originalDirectory + "cleaned_images" + File.separator;
  File.makeDirectory(destination);

  inputTitle = File.getName(originalTitle);

  axonFilename = makeTiffFilename("axon_terminal", inputTitle);
  axonFilepath = destination + axonFilename;

  endplateFilename = makeTiffFilename("muscle_endplate", inputTitle);
  endplateFilepath = destination + endplateFilename;

  endplateIntermediateFilename = makeTiffFilename("muscle_intermediate_endplate", inputTitle);
  endplateIntermediateFilepath = destination + endplateIntermediateFilename;

  getDimensions(width, height, numberOfChannels, slices, frames);
  if (slices > 1) {
    run("Z Project...", "projection=[Max Intensity]");
    MAXtitle = getTitle();
    safeSelectWindow(originalTitle);
    close();
    safeSelectWindow(MAXtitle);
    originalTitle = MAXtitle;
  }

  originalImageId = getImageID();
  sourceCopyTitle = "__aNMJ_source_" + originalImageId;
  run("Duplicate...", "title=[" + sourceCopyTitle + "] duplicate");
  sourceCopyId = getImageID();
  selectImage(originalImageId);

  outputFilename = originalDirectory + "raw_data_table.csv";

  printIfEnabled(getTitle());
  run("Clear Results");
  run("Paintbrush Tool Options...", "brush=100");

  getDimensions(imageWidth, imageHeight, numberOfChannels, slices, frames);
  imageDimensionsPixels = "" + imageWidth + " x " + imageHeight;
  printIfEnabled("Image dimensions (pixels): " + imageDimensionsPixels);

  getPixelSize(sizeUnit, pixelSizeX, pixelSizeY);
  if (pixelSizeX != pixelSizeY) {
    safeWaitForUser("WARNING: The image has a different scale on the X and Y axes. The results may not be accurate!");
  }
  metricWidth = pixelSizeX * imageWidth;
  metricHeight = pixelSizeY * imageHeight;
  imageDimensionsMetric = "" + formatNumber(metricWidth) + " x " + formatNumber(metricHeight) + sizeUnit;
  printIfEnabled("Image dimensions (metric): " + imageDimensionsMetric);

  suppliedMuscleChannel = getJavaArgumentValue("muscle-channel");
  suppliedNerveChannel = getJavaArgumentValue("nerve-channel");
  channelsCanonical = indexOf(";" + javaArgument + ";", ";channels-canonical=1;") >= 0;
  if (suppliedMuscleChannel != "" && suppliedNerveChannel != "") {
    muscleEndplateChannel = parseInt(suppliedMuscleChannel);
    nerveTerminalChannel = parseInt(suppliedNerveChannel);
  } else {
    Dialog.create("Welcome");
    Dialog.addMessage("Welcome to 'aNMJ-morph' macro. \nSelect channel 1 that is currently displayed. \nSelect channel 2. \n-\nPress OK.");
    for (i = 1; i <= numberOfChannels; i++) {
      Dialog.addChoice("Channel " + i, newArray("Ignore", "Muscle endplate", "Nerve terminal"));
    }
    Dialog.show();

    muscleEndplateChannel = -1;
    nerveTerminalChannel = -1;
    for (i = 1; i <= numberOfChannels; i++) {
      choice = Dialog.getChoice();
      if (choice == "Muscle endplate") {
        if (muscleEndplateChannel != -1) {
          exit("Error: More than one channel was selected as the muscle endplate channel");
        }
        muscleEndplateChannel = i;
      }
      if (choice == "Nerve terminal") {
        if (nerveTerminalChannel != -1) {
          exit("Error: More than one channel was selected as the nerve terminal channel");
        }
        nerveTerminalChannel = i;
      }
    }
  }
  if (muscleEndplateChannel == -1) {
    exit("Error: No muscle endplate channel was selected");
  }
  if (nerveTerminalChannel == -1) {
    exit("Error: No nerve terminal channel was selected");
  }
  if (muscleEndplateChannel < 1 || muscleEndplateChannel > numberOfChannels ||
      nerveTerminalChannel < 1 || nerveTerminalChannel > numberOfChannels ||
      muscleEndplateChannel == nerveTerminalChannel) {
    exit("Error: Invalid muscle endplate/nerve terminal channel selection");
  }

  selectImage(originalImageId);
  if (!channelsCanonical) {
    run("Arrange Channels...", "new=" + muscleEndplateChannel + '' + nerveTerminalChannel);
  }
  selectImage(originalImageId);
  Stack.setChannel(1);
  run("Split Channels");
  run("Threshold...");

  selectImage(sourceCopyId);
  templateTitle = "__aNMJ_template_" + sourceCopyId;
  run("Duplicate...", "title=[" + templateTitle + "] duplicate");
  templateImageId = getImageID();
  selectImage(templateImageId);
  if (!channelsCanonical) {
    run("Arrange Channels...", "new=" + muscleEndplateChannel + '' + nerveTerminalChannel);
  }
  selectImage(templateImageId);
  Stack.setChannel(1);
  run("Split Channels");
  templateFileName = templateTitle;

  setTool(19);
  setForegroundColor(0, 0, 0);

  safeSelectWindow("C2-" + originalTitle);
  getLocationAndSize(x, y, width, height);
  setLocation(50, 50);
  safeSelectWindow("C2-" + templateFileName);
  setLocation(100 + width, 50);

  safeSelectWindow("C2-" + originalTitle);
  safeWaitForUser("2/7 Threshold Nerve terminal. \nUse the reference image as a guide to selecting the appropriate threshold. \nSelect a pre-set threshold from the drop down menu or adjust manually (top scroll bar). \n-\nHint: If you make any mistakes start macro again ('esc' exits macro). \n-\nErase Background Noise. \nPaintbrush tool is already selected. \nBrush width can be adjusted by double-clicking on brush icon. \n-\nPress OK.");

  thresholdMethodNerveTerminal = getInfo("threshold.method");

  setOption("BlackBackground", false);
  run("Make Binary", "thresholded remaining black");
  run("Despeckle");
  saveAs("Tiff", axonFilepath);

  safeSelectWindow("C2-" + templateFileName);
  close();

  safeSelectWindow("Threshold");
  run("Close");

  safeSelectWindow("C1-" + originalTitle);
  run("Threshold...");

  safeSelectWindow("C1-" + originalTitle);
  getLocationAndSize(x, y, width, height);
  setLocation(50, 50);
  safeSelectWindow("C1-" + templateFileName);
  setLocation(100+width, 50);
  safeSelectWindow("C1-" + originalTitle);

  safeWaitForUser("3/7 Threshold Muscle Endplate. \nUse the reference image as a guide to selecting appropriate threshold. \nSelect a pre-set threshold from the drop-down menu or adjust manually (top scroll bar). \n-\nErase Background Noise. \nPaintbrush tool is already selected. \nBrush width can be adjusted by double clicking on brush icon. \n-\nPress OK. ");

  thresholdMethodEndplate = getInfo("threshold.method");

  run("Make Binary", "thresholded remaining black");
  run("Despeckle");

  safeSelectWindow("Threshold");
  run("Close");

  safeSelectWindow("C1-" + originalTitle);
  saveAs("Tiff", endplateFilepath);

  safeSelectWindow("C1-" + templateFileName);
  close();

  setTool(4);
  safeSelectWindow(axonFilename);
  run("Set Measurements...", "  redirect=None decimal=8");
  safeWaitForUser("Screen 4/7 Measuring Axon Width. \nLine tool is already selected. \nMeasure by drawing line and pressing 'M' on keyboard. \nThree measurements are required: \n   1) Maximum axon width \n   2) Minimum axon width \n   3) Axon hillock width \n-\n\Hint: Axon hillock is where axon meets nerve terminals. \nHint: Zoom in for accurate measurement of thin axons. \nPress 'ctrl' and '+' or '-' to zoom in or out. \n-\nNotes: Axon width will be recorded automatically using the average of the three measurements. \nEnsure that extra measurements are deleted from 'results tab' before pressing OK. \nIf no axon is present, press OK. \n-\nPress OK.");

  resultsCount = nResults();
  resultsArray = newArray(resultsCount);
  for (i=0; i<resultsCount; i++) {
    resultsArray[i] = getResult("Length", i);
  }
  Array.getStatistics(resultsArray,min,max,avg,stdev);
  axonDiameter = avg;
  printIfEnabled("Axon diameter: " + axonDiameter);

  if (isOpen("Results")) {
    safeSelectWindow("Results");
    run("Close");
  }

  setTool(19);
  setForegroundColor(255,255,255);
  safeWaitForUser("Screen 5/7 Erase Axon \nPaintbrush tool is already selected. \nBrush width can be adjusted by double-clicking on brush icon. \n-\nPress OK. \nRemainder of the 'aNMJ-morph' macro will run automatically.");
  run("Set Measurements...", "area mean min perimeter feret's redirect=None decimal=8");

  run("Create Selection");
  run("Measure");
  nerveTerminalArea = getResult("Area");
  printIfEnabled("Nerve terminal area: " + nerveTerminalArea);
  nerveTerminalPerimeter = getResult("Perim.");
  printIfEnabled("Nerve terminal perimeter: " + nerveTerminalPerimeter);

  run("Make Binary", "thresholded remaining black");
  run("Convert to Mask");
  run("Skeletonize");
  run("BinaryConnectivity ", "white");
  getHistogram(values,counts, 256);
  printIfEnabled("0: " + counts[0]);
  printIfEnabled("2: " + counts[2]);
  printIfEnabled("4: " + counts[4]);
  printIfEnabled("5: " + counts[5]);
  counts0 = counts[0];
  counts2 = counts[2];
  counts4 = counts[4];
  counts5 = counts[5];
  totalLengthOfBranches = (imageWidth * imageHeight - counts0) * pixelSizeX;

  safeSelectWindow(axonFilename);
  run("Close");
  run("Create Selection");
  run("Measure");
  achrArea = getResult("Area");
  printIfEnabled("AChR area: " + achrArea);
  achrPerimeter = getResult("Perim.");
  printIfEnabled("AChR perimeter: " + achrPerimeter);

  run("Subtract Background...", "rolling=50 create");
  run("Make Binary", "thresholded remaining black");

  run("Create Selection");
  run("Measure");
  endplateDiameter = getResult("Feret");
  printIfEnabled("Endplate diameter: " + endplateDiameter);
  endplateArea = getResult("Area");
  printIfEnabled("Endplate area: " + endplateArea);
  endplatePerimeter = getResult("Perim.");
  printIfEnabled("Endplate perimeter: " + endplatePerimeter);

  saveAs("Tiff", endplateIntermediateFilepath);
  safeSelectWindow(endplateIntermediateFilename);
  run("Close");

  open(axonFilepath);
  rename(axonFilename);
  open(endplateFilepath);
  rename(endplateFilename);

  run("Invert");
  run("Concatenate...", "title=[Concatenated Stacks] image1=[" + axonFilename + "] image2=[" + endplateFilename + "]");
  run("Z Project...", "projection=[Average Intensity]");
  run("Make Binary");

  run("Create Selection");
  run("Measure");

  unoccupiedAchrArea = getResult("Area");
  printIfEnabled("Unoccupied AChR Area: " + unoccupiedAchrArea);

  safeSelectWindow("Results");
  run("Close");
  safeSelectWindow("Concatenated Stacks");
  run("Close");
  safeSelectWindow("AVG_Concatenated Stacks");
  run("Close");

  selectImage(sourceCopyId);
  segmentCopyTitle = "__aNMJ_segment_" + sourceCopyId;
  run("Duplicate...", "title=[" + segmentCopyTitle + "] duplicate");
  segmentImageId = getImageID();
  selectImage(segmentImageId);
  if (!channelsCanonical) {
    run("Arrange Channels...", "new=" + muscleEndplateChannel + '' + nerveTerminalChannel);
  }
  selectImage(segmentImageId);
  Stack.setChannel(1);

  run("Split Channels");
  run("Close");
  run("Make Binary");
  run("Find Maxima...", "noise=10 output=[Segmented Particles]");
  run("Invert");

  Dialog.create("Is this image OK?");
  Dialog.addMessage("Screen 6/7 Check segmented image. \nDoes this image look similar to the reference image? \nIf not, please untick the checkbox below. \n-\nHint: Do not press 'cancel' as this will stop the macro running to completion. \nNotes: See manuscript and instruction video for examples of incorrect segmentation. \n-\nPress OK.");
  Dialog.addCheckbox("Image looks OK", true);
  Dialog.show();

  imageAlright = Dialog.getCheckbox();

  run("Fill Holes");
  open(endplateIntermediateFilepath);
  rename(endplateIntermediateFilename);

  safeSelectWindow("C1-" + segmentCopyTitle + " Segmented");
  run("Concatenate...", "title=[Concatenated Stacks] open image1=[C1-" + segmentCopyTitle + " Segmented] image2=[" + endplateIntermediateFilename + "]");

  run("Z Project...", "projection=[Average Intensity]");
  setOption("BlackBackground", false);
  run("Make Binary", "thresholded remaining black");
  run("Analyze Particles...", "display summarize");
  IJ.renameResults("Summary", "Results");
  numberOfClusters = getResult("Count");
  printIfEnabled("Number of clusters: " + numberOfClusters);
  safeSelectWindow("Results");
  run("Close");

  if (isOpen(sourceCopyTitle)) {
    safeSelectWindow(sourceCopyTitle);
    run("Close");
  }

  fileLength = 0;
  if (File.exists(outputFilename)) {
    fileLength = File.length(outputFilename);
  }

  if (fileLength > 0) {
    fileContents = File.openAsRawString(outputFilename, fileLength);
    lastCharacter = substring(fileContents, lengthOf(fileContents) - 1);
    lines = split(fileContents, "\n");
    rowNumber = lines.length + 1;
    if (lastCharacter != "\n") {
      File.append("", outputFilename);
    }
  } else {
    line1 = "IMAGE DETAILS (frame size)" + columnSeparator +
            columnSeparator +
            "NMJ" + columnSeparator +
            "THRESHOLD" + columnSeparator +
            "PRE-SYNAPTIC" + columnSeparator +
            columnSeparator +
            columnSeparator +
            columnSeparator +
            "Branch analysis" + columnSeparator +
            columnSeparator +
            columnSeparator +
            columnSeparator +
            columnSeparator +
            columnSeparator +
            columnSeparator +
            columnSeparator +
            columnSeparator +
            "POST-SYNAPTIC";
    line2 = '"Number of pixels (eg, 512 x 512)"' + columnSeparator +
            '"Metric (eg, 67.48 x 67.48um)"' + columnSeparator +
            '"Ref number"' + columnSeparator +
            '"(nerve terminal/motor endplate)"' + columnSeparator +
            '"Number of Axonal Inputs"' + columnSeparator +
            '"Axon Diameter (um)"' + columnSeparator +
            '"Nerve Terminal Perimeter (um)"' + columnSeparator +
            '"Nerve Terminal Area (um2)"' + columnSeparator +
            '"Value 0 (background white pixels)"' + columnSeparator +
            '"Value 2 (terminal pixels)"' + columnSeparator +
            '"Value 4 (three-point branch pixels)"' + columnSeparator +
            '"Value 5 (four-point branch pixels)"' + columnSeparator +
            '" Number of Terminal Branches"' + columnSeparator +
            '"Number of Branch Points"' + columnSeparator +
            '"Total Length of Branches (um)"' + columnSeparator +
            '"Average Length of Branches (um)"' + columnSeparator +
            '"""Complexity"""' + columnSeparator +
            '"AChR Perimeter (um)"' + columnSeparator +
            '"AChR Area (um2)"' + columnSeparator +
            '"Endplate Diameter (um)"' + columnSeparator +
            '"Endplate Perimeter (um)"' + columnSeparator +
            '"Endplate Area (um2)"' + columnSeparator +
            '"""Compactness"" (%)"' + columnSeparator +
            '"Unoccupied AChR Area (um2)"' + columnSeparator +
            '"""Area of Synaptic Contact"" (um2)"' + columnSeparator +
            '"""Overlap"" (%)"' + columnSeparator +
            '"Number of AChR Clusters"' + columnSeparator +
            '"Average Area of AChR Clusters (um2)"' + columnSeparator +
            '"""Fragmentation"""';
    File.saveString(line1 + "\n" + line2 + "\n", outputFilename);
    rowNumber = 3;
  }

  if (imageAlright) {
    formattedNumberOfClusters = formatNumber(numberOfClusters);
  } else {
    formattedNumberOfClusters = '';
  }

  output = '"' + imageDimensionsPixels + '"' + columnSeparator +
           '"' + imageDimensionsMetric + '"' + columnSeparator +
           inputTitle + columnSeparator +
           thresholdMethodNerveTerminal + "/" + thresholdMethodEndplate + columnSeparator +
           /* empty */ columnSeparator +
           formatNumber(axonDiameter) + columnSeparator +
           formatNumber(nerveTerminalPerimeter) + columnSeparator +
           formatNumber(nerveTerminalArea) + columnSeparator +
           formatNumber(counts0) + columnSeparator +
           formatNumber(counts2) + columnSeparator +
           formatNumber(counts4) + columnSeparator +
           formatNumber(counts5) + columnSeparator +
           '"=J' + rowNumber + '"' + columnSeparator +
           '"=(K' + rowNumber + '+L' + rowNumber + ')*0' + decimalSeparator + '28"' + columnSeparator +
           formatNumber(totalLengthOfBranches) + columnSeparator +
           '"=O' + rowNumber + '/J' + rowNumber + '"' + columnSeparator +
           '"=LOG10(M' + rowNumber + '*N' + rowNumber + '*O' + rowNumber + ')"' + columnSeparator +
           formatNumber(achrPerimeter) + columnSeparator +
           formatNumber(achrArea) + columnSeparator +
           formatNumber(endplateDiameter) + columnSeparator +
           formatNumber(endplatePerimeter) + columnSeparator +
           formatNumber(endplateArea) + columnSeparator +
           '"=S' + rowNumber + '/V' + rowNumber + '*100"' + columnSeparator +
           formatNumber(unoccupiedAchrArea) + columnSeparator +
           '"=S' + rowNumber + '-X' + rowNumber + '"' + columnSeparator +
           '"=(S' + rowNumber + '-X' + rowNumber + ')/S' + rowNumber + '*100"' + columnSeparator +
           formattedNumberOfClusters + columnSeparator +
           '"=IF(AA' + rowNumber + columnSeparator + 'S' + rowNumber + '/AA' + rowNumber + columnSeparator + '"""")"' + columnSeparator +
           '"=IF(AA' + rowNumber + columnSeparator + '1-1/AA' + rowNumber + columnSeparator + '"""")"';

  File.append(output, outputFilename);

  safeWaitForUser("7/7 Congratulations- 'aNMJ-morph is now complete! \n-\nPress OK. \nImages will be closed down and measurements will be saved onto a raw_data_table document.");
  safeSelectWindow("Concatenated Stacks");
  run("Close");
  safeSelectWindow("AVG_Concatenated Stacks");
  run("Close");
}

function batchProcess(directory) {
  list = getFileList(directory);
  for (i = 0; i < list.length; i++) {
    fileName = directory + list[i];

    if (File.isDirectory(fileName)) {
      lowerDirectory = toLowerCase(fileName);
      if (indexOf(lowerDirectory, "cleaned_images") == -1) {
        batchProcess(fileName);
      }
    } else {
      lowerName = toLowerCase(fileName);
      if (endsWith(lowerName, ".tif") ||
          endsWith(lowerName, ".tiff") ||
          endsWith(lowerName, ".lsm") ||
          endsWith(lowerName, ".nd2") ||
          endsWith(lowerName, ".czi") ||
          endsWith(lowerName, ".lif") ||
          endsWith(lowerName, ".png") ||
          endsWith(lowerName, ".jpg") ||
          endsWith(lowerName, ".jpeg") ||
          endsWith(lowerName, ".bmp")) {
        openImageFile(fileName);
        processOpenImage(fileName);
      }
    }
  }
}
